PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = reading2
  Units = use prefs
  Screen = 1
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Routines
  Routine Intro
    TextComponent intro_part
      text = I want you to read some sentences and decide if the following sentences make logical sense. Answer yes or no respectively.
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SoundComponent intro_part_sound
      volume = instructions_read_some_sentences
      stopVal [duration (s)] = 10
      startVal [condition] = 0.0
Flow
  Routine Intro
