PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = reading_fluency
  Units = use prefs
  Screen = 1
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Routines
  Routine instructionsPART1
    TextComponent beginning
      stopVal [duration (s)] = 5.0
      text = I want you to read some sentences and decide if the answer is yes or no.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent sample_1
      text = A cow is an animal.
      startVal [time (s)] = 5.0
      letterHeight = 0.1
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    ImageComponent Yes
      pos = (-.11, -.5)
      startVal [time (s)] = 5.0
      image = Yes.jpg
      size = (0.2, 0.2)
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    ImageComponent No
      pos = (.1, -.5)
      startVal [time (s)] = 5
      image = No.jpg
      size = (0.2, 0.2)
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 5
      saveMouseState = final
  Routine begin
    TextComponent text_2
      text = Press the spacebar to begin.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine newwww
    TextComponent text_3
      stopVal [duration (s)] = 10
      text [set every frame] = $sentence
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent End
      stopVal [duration (s)] = 10
      pos = (.9, -.5)
      startVal [time (s)] = 0.0
      image = End.jpg
      size = (0.3, 0.3)
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  Routine end_
    TextComponent end
      stopVal [duration (s)] = 10
      text = The exam has now ended. Thank You
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine practice_instructions_
    TextComponent practice_instructions
      text = Now look at the following sentences. Click the correct answer for each sentence. Work as quickly as you can without making mistakes. Press the spacebar to begin.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text
      stopVal [duration (s)] = 30.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Start with the first sentence and read as many sentences as you can.Decide if the answer is yes or no. There are 98 sentences. Keep working until time is up. Work as quickly as you can without making mistakes. If you do make a mistake, simply go back.If you have trouble reading a word or cannot think of the answer, skip that one and go onto the next one.You will have three minutes. You may click the end button during anytime to indicate that you have finished the exam.
Flow
  Routine instructionsPART1
  Routine practice_instructions_
  Routine instructions
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = reading_fluency_data.xlsx
    loopType = sequential
    nReps = 98
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    conditions:
      [{u'answer': u'Y', u'input': None, u'sentence': u'A bird can fly.'},
      {u'answer': u'N', u'input': None, u'sentence': u'Cats have five legs.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'Some people have long hair'},
      {u'answer': u'Y', u'input': None, u'sentence': u'People have teeth.'},
      {u'answer': u'N', u'input': None, u'sentence': u'The sky is always brown and yellow.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'A clock tells time.'},
      {u'answer': u'N', u'input': None, u'sentence': u'The color of grass is red.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'A school bus has a driver.'},
      {u'answer': u'N', u'input': None, u'sentence': u'People like to drink gum.'},
      {u'answer': u'N', u'input': None, u'sentence': u'A butterfly has ten wings.'},
      {u'answer': u'N', u'input': None, u'sentence': u'A train goes on the road.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'A banana is to eat.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'Summer is a season of the year.'},
      {u'answer': u'N', u'input': None, u'sentence': u'Ants are very big.'},
      {u'answer': u'N', u'input': None, u'sentence': u'A fire is cold.'},
      {u'answer': u'N', u'input': None, u'sentence': u'A bus has wings'},
      {u'answer': u'N', u'input': None, u'sentence': u'The color of milk is pink.'},
      {u'answer': u'N', u'input': None, u'sentence': u'A flower grows in the sky.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'A dog may bark at a cat.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'A room in a house has walls.'}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
    Routine newwww
  LoopTerminator trials
  Routine end_
