PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = test
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent trails
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sample_reading_fluency_data.xlsx
    loopType = sequential
    nReps = 98
    Selected rows = sentence
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    conditions:
      [{u'answer': u'Y', u'input': None, u'sentence': u'A cow is an animal.'},
      {u'answer': u'N', u'input': None, u'sentence': u'A fish lives on land.'},
      {u'answer': u'N', u'input': None, u'sentence': u'An apple is blue.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'The moon is in the sky.'},
      {u'answer': u'Y', u'input': None, u'sentence': u'A man has two legs.'},
      {u'answer': u'N', u'input': None, u'sentence': u'Ice is hot.'}]
    Routine trial
  LoopTerminator trials
